PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['materials\\condition_feedback_background.jpg', 'materials\\end1.jpg', 'materials\\end2.jpg', 'materials\\end3.jpg', 'materials\\instruction.jpg', 'materials\\materials.pptx', 'materials\\step1_background.jpg', 'materials\\step1_error.jpg', 'materials\\step1_instr.jpg', 'materials\\step2_background.jpg', 'materials\\step2_error.jpg', 'materials\\step2_instr.jpg', 'materials\\step3_background.jpg', 'materials\\step3_error.jpg', 'materials\\step3_practice_instr.jpg', 'materials\\step3_test_instr.jpg', 'materials\\step4_background.jpg', 'materials\\step4_error.jpg', 'materials\\step4_instr.jpg', 'materials\\step5_background.jpg', 'materials\\step5_error.jpg', 'materials\\step5_practice_instr.jpg', 'materials\\step5_test_instr.jpg', 'conditions\\conditions1.xlsx', 'conditions\\conditions2.xlsx', 'conditions\\step1.xlsx', 'conditions\\step2.xlsx', 'conditions\\step3_practice.xlsx', 'conditions\\step3_test.xlsx', 'conditions\\step4.xlsx', 'conditions\\step5_practice.xlsx', 'conditions\\step5_test.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = Implicit_Association_Test
  logging level = debug
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Routines
  Routine IAT_Instruction
    CodeComponent blocks_order_code
      Code Type = Auto->JS
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      Begin Experiment:
        blocks_order = randint(1,2)
    ImageComponent IAT_instr_image
      image = materials/instruction.jpg
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent IAT_instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Step_Instruction_2
    ImageComponent instr_image
      image [set every repeat] = $step_instruction_filename
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
    TextComponent blank_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine End
    ImageComponent end3_image
      image = materials/end3.jpg
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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    ImageComponent end2_image
      image = materials/end2.jpg
      size = (1.6,0.9)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      units = height
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    ImageComponent end1_image
      image = materials/end1.jpg
      size = (1.6,0.9)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      units = height
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  Routine Trial
    CodeComponent interval_time_code
      Code Type = Auto->JS
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      Begin Experiment:
        corr_record = []
        rt_record = []


        interval_time_list = [0.1, 0.4, 0.7]
      Begin Routine:
        shuffle(interval_time_list)
        interval_time = interval_time_list[0]
      End Routine:
        corr_record.append(response.corr)
        rt_record.append(response.rt)
        thisExp.addData('response.interval_time', interval_time)
    ImageComponent trial_test_background_img
      image [set every repeat] = $step_background_filename
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent stimuli_text
      letterHeight = 0.05
      pos = (0, 0.05)
      startEstim = 0.1
      startVal [time (s)] = $interval_time
      text [set every repeat] = $stimuli_words
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    KeyboardComponent response
      allowedKeys = 'e','i'
      correctAns = $CorrAns
      forceEndRoutine = True
      startEstim = 0.1
      startVal [time (s)] = $interval_time
      storeCorrect = True
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  Routine Trial_Feedback
    ImageComponent error_feedback_img
      image [set every repeat] = $step_error_filename
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent error_feedback_resp
      allowedKeys = 'e','i'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent trial_feedback_code
      Code Type = Auto->JS
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      Each Frame:
        if (not need_feedback) or (response.corr):
            continueRoutine = False

        if error_feedback_resp.keys:
            n_keys = len(error_feedback_resp.keys)
            last_key = error_feedback_resp.keys[n_keys -1]
            if last_key == CorrAns:
                continueRoutine = False
  Routine Condition_Feedback
    CodeComponent condition_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        average_corr = sum(corr_record) / len(corr_record) * 100
        average_rt = sum(rt_record) / len(rt_record)

        corr_feedback_message = f'这一轮你的正确率为：{round(average_corr, 2)}%'
        rt_corr_feedback_message = f'这一轮你的平均反应时间为：{round(average_rt, 2)} 秒'

        feedback_message = f'{corr_feedback_message}\n{rt_corr_feedback_message}'
        corr_record = [] # 这一轮结束后，将这一轮存储的corr信息清零
        rt_record = []   # 这一轮结束后，将这一轮存储的rt信息清零
    ImageComponent condition_feedback_background_img
      image = materials/condition_feedback_background.jpg
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent feedback_text
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_message
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    KeyboardComponent condition_feedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine IAT_Instruction
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $'conditions/conditions' +str(blocks_order)+ '.xlsx'
    loopType = sequential
    nReps = 1
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    Routine Step_Instruction_2
    Routine Blank
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $step_order_filename
      loopType = random
      nReps = 1
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      Routine Trial
      Routine Trial_Feedback
    LoopTerminator trials
    Routine Condition_Feedback
  LoopTerminator blocks
  Routine End
