PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['condition\\exp.xlsx', 'condition\\practice.xlsx', 'stimuli\\2_0.jpg', 'stimuli\\2_0_R.jpg', 'stimuli\\2_50.jpg', 'stimuli\\2_50_R.jpg', 'stimuli\\2_100.jpg', 'stimuli\\2_100_R.jpg', 'stimuli\\2_150.jpg', 'stimuli\\2_150_R.jpg', 'stimuli\\3_0.jpg', 'stimuli\\3_0_R.jpg', 'stimuli\\3_50.jpg', 'stimuli\\3_50_R.jpg', 'stimuli\\3_100.jpg', 'stimuli\\3_100_R.jpg', 'stimuli\\3_150.jpg', 'stimuli\\3_150_R.jpg', 'stimuli\\4_0.jpg', 'stimuli\\4_0_R.jpg', 'stimuli\\4_50.jpg', 'stimuli\\4_50_R.jpg', 'stimuli\\4_100.jpg', 'stimuli\\4_100_R.jpg', 'stimuli\\4_150.jpg', 'stimuli\\4_150_R.jpg', 'stimuli\\10_0.jpg', 'stimuli\\10_0_R.jpg', 'stimuli\\10_50.jpg', 'stimuli\\10_50_R.jpg', 'stimuli\\10_100.jpg', 'stimuli\\10_100_R.jpg', 'stimuli\\10_150.jpg', 'stimuli\\10_150_R.jpg', 'stimuli\\11_0.jpg', 'stimuli\\11_0_R.jpg', 'stimuli\\11_50.jpg', 'stimuli\\11_50_R.jpg', 'stimuli\\11_100.jpg', 'stimuli\\11_100_R.jpg', 'stimuli\\11_150.jpg', 'stimuli\\11_150_R.jpg', 'stimuli\\12_0.jpg', 'stimuli\\12_0_R.jpg', 'stimuli\\12_50.jpg', 'stimuli\\12_50_R.jpg', 'stimuli\\12_100.jpg', 'stimuli\\12_100_R.jpg', 'stimuli\\12_150.jpg', 'stimuli\\12_150_R.jpg', 'stimuli\\13_0.jpg', 'stimuli\\13_0_R.jpg', 'stimuli\\13_50.jpg', 'stimuli\\13_50_R.jpg', 'stimuli\\13_100.jpg', 'stimuli\\13_100_R.jpg', 'stimuli\\13_150.jpg', 'stimuli\\13_150_R.jpg', 'stimuli\\14_0.jpg', 'stimuli\\14_0_R.jpg', 'stimuli\\14_50.jpg', 'stimuli\\14_50_R.jpg', 'stimuli\\14_100.jpg', 'stimuli\\14_100_R.jpg', 'stimuli\\14_150.jpg', 'stimuli\\14_150_R.jpg', 'stimuli\\15_0.jpg', 'stimuli\\15_0_R.jpg', 'stimuli\\15_50.jpg', 'stimuli\\15_50_R.jpg', 'stimuli\\15_100.jpg', 'stimuli\\15_100_R.jpg', 'stimuli\\15_150.jpg', 'stimuli\\15_150_R.jpg', 'stimuli\\16_0.jpg', 'stimuli\\16_0_R.jpg', 'stimuli\\16_50.jpg', 'stimuli\\16_50_R.jpg', 'stimuli\\16_100.jpg', 'stimuli\\16_100_R.jpg', 'stimuli\\16_150.jpg', 'stimuli\\16_150_R.jpg', 'stimuli\\17_0.jpg', 'stimuli\\17_0_R.jpg', 'stimuli\\17_50.jpg', 'stimuli\\17_50_R.jpg', 'stimuli\\17_100.jpg', 'stimuli\\17_100_R.jpg', 'stimuli\\17_150.jpg', 'stimuli\\17_150_R.jpg', 'stimuli\\18_0.jpg', 'stimuli\\18_0_R.jpg', 'stimuli\\18_50.jpg', 'stimuli\\18_50_R.jpg', 'stimuli\\18_100.jpg', 'stimuli\\18_100_R.jpg', 'stimuli\\18_150.jpg', 'stimuli\\18_150_R.jpg', 'stimuli\\19_0.jpg', 'stimuli\\19_0_R.jpg', 'stimuli\\19_50.jpg', 'stimuli\\19_50_R.jpg', 'stimuli\\19_100.jpg', 'stimuli\\19_100_R.jpg', 'stimuli\\19_150.jpg', 'stimuli\\19_150_R.jpg', 'stimuli\\20_0.jpg', 'stimuli\\20_0_R.jpg', 'stimuli\\20_50.jpg', 'stimuli\\20_50_R.jpg', 'stimuli\\20_100.jpg', 'stimuli\\20_100_R.jpg', 'stimuli\\20_150.jpg', 'stimuli\\20_150_R.jpg', 'stimuli\\21_0.jpg', 'stimuli\\21_0_R.jpg', 'stimuli\\21_50.jpg', 'stimuli\\21_50_R.jpg', 'stimuli\\21_100.jpg', 'stimuli\\21_100_R.jpg', 'stimuli\\21_150.jpg', 'stimuli\\21_150_R.jpg', 'instruction\\instr_exp.jpg', 'instruction\\instr_practice.jpg', 'feedback\\correct.png', 'feedback\\incorrect.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = Mental_Rotation
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Routines
  Routine trial
    KeyboardComponent response
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      storeCorrect = True
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    ImageComponent trial_image
      image [set every repeat] = $pic_file
      size = (0.8, 0.427)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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  Routine feedback
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if k.corr:
            fbp2 = 'feedback/correct.png'
        elif not k.corr:
            fbp2 = 'feedback/incorrect.png'
        else:
            print('somthing wired happened!')
    ImageComponent image_9
      image [set every repeat] = $imagefile1
      size = (0.8,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent image_10
      image [set every repeat] = $fbp2
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instr_training
    ImageComponent image_3
      image = instruction/instruction2.png
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        测试结束！

        按空格键退出测试
    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent blank_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feed_back
    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if response.corr:
            feedback_pic = 'feedback/correct.png'
        else:
            feedback_pic = 'feedback/incorrect.png'
    ImageComponent last_stimuli_image
      image [set every repeat] = $pic_file
      size = (0.8, 0.427)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent feedback_image
      image [set every repeat] = $feedback_pic
      pos = (0, -0.3)
      size = (0.15, 0.059)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instr_practice
    ImageComponent instr_practice_image
      image = instruction/instr_practice.jpg
      size = (1.778,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_practice_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_exp
    ImageComponent instr_exp_image
      image = instruction/instr_exp.jpg
      size = (1.778,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_exp_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr_practice
  LoopInitiator practices loopType="TrialHandler"
    conditionsFile = condition/practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imagefile', 'stimuli/4_50_R.jpg'), ('orientation', 50), ('corrResponse', 'left'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/4_50.jpg'), ('orientation', 50), ('corrResponse', 'right'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/4_150_R.jpg'), ('orientation', 150), ('corrResponse', 'left'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/4_150.jpg'), ('orientation', 150), ('corrResponse', 'right'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/4_100_R.jpg'), ('orientation', 100), ('corrResponse', 'left'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/4_100.jpg'), ('orientation', 100), ('corrResponse', 'right'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/4_0_R.jpg'), ('orientation', 0), ('corrResponse', 'left'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/4_0.jpg'), ('orientation', 0), ('corrResponse', 'right'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/3_50_R.jpg'), ('orientation', 50), ('corrResponse', 'left'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/3_50.jpg'), ('orientation', 50), ('corrResponse', 'right'), ('trial_type', 'Practice')]),
      OrderedDict([('imagefile', 'stimuli/3_150_R.jpg'), ('orientation', 150), ('corrResponse', 'left'), ('trial_type', 'Practice')])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
    Routine ITI
    Routine trial
    Routine feed_back
  LoopTerminator practices
  Routine instr_exp
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition\exp.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pic_file', 'stimuli/21_50_R.jpg'), ('pic_orientation', 50), ('corrAns', 'left'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/21_50.jpg'), ('pic_orientation', 50), ('corrAns', 'right'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/21_150_R.jpg'), ('pic_orientation', 150), ('corrAns', 'left'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/21_150.jpg'), ('pic_orientation', 150), ('corrAns', 'right'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/21_100_R.jpg'), ('pic_orientation', 100), ('corrAns', 'left'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/21_100.jpg'), ('pic_orientation', 100), ('corrAns', 'right'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/21_0_R.jpg'), ('pic_orientation', 0), ('corrAns', 'left'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/21_0.jpg'), ('pic_orientation', 0), ('corrAns', 'right'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/20_50_R.jpg'), ('pic_orientation', 50), ('corrAns', 'left'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/20_50.jpg'), ('pic_orientation', 50), ('corrAns', 'right'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/20_150_R.jpg'), ('pic_orientation', 150), ('corrAns', 'left'), ('trial_type', 'Exp')]),
      OrderedDict([('pic_file', 'stimuli/20_150.jpg'), ('pic_orientation', 150), ('corrAns', 'right'), ('trial_type', 'Exp')])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
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine end
