PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['condition.xlsx', 'Instr\\instr_exp.jpeg', 'Instr\\instr_practice.jpeg']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Stroop_Color_Word_Test
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Routines
  Routine instr_practice
    KeyboardComponent instr_practice_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instr_practice_image
      image = Instr/instr_practice.jpeg
      size = (1.778, 1)
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent stroop_word
      color [set every repeat] = $word_color
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent exp_resp
      allowedKeys = 'f','g','h','j'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine thanks
    TextComponent thanks_word
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        此次实验到此结束。
        感谢您的参与。
        祝好
        (按击空格键退出实验)
    KeyboardComponent thanks_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        #feedback word variable just needs some value at start
        #feed_word变量需要在实验开始时被定义，并且赋予值
        feedback_word = ""
        count_trial = 0
        count_corr = 0
      Begin Routine:
        if exp_resp.corr:
            # exp_resp在上个routine（trial）结束时被储存
            # exp_resp.corr用来判断trial中被试给出的反应是否正确
            # 存储正确率的变量+1
            count_corr += 1
            count_trial += 1
            # 如果被试反应正确并且反应时不超过2s，反馈出正确的信息
            if exp_resp.rt < 1.5:
                # 此处需手动在JS中更改string格式
                feedback_word = f"正确！你的反应时为：{int(exp_resp.rt * 1000)/1000}s。正确数：{count_corr}"
            else:
                # 如果被试反应时超过1.5s,反馈出反应慢的信息
                feedback_word = f"正确！但反应太慢！反应时为：{int(exp_resp.rt * 1000)/1000}s。正确数：{count_corr}"
        else:
            count_trial += 1
            feedback_word = f"啊哦，错误！正确数：{count_corr}。\n请注意，如果您正确数低于18，需重复练习。"
        # 如果被试反应不正确，反馈出错误的信息

        if count_trial == 24:
            if count_corr >= 18:
                #此处需手动在JS中将practice改为trials
                practice.finished = True
            else:
                count_trial = 0
                count_corr = 0
                feedback_word = "因为您的正确数过低，将再次进入练习阶段。"
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_word
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  Routine instr_exp
    KeyboardComponent instr_exp_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instr_exp_image
      image = Instr/instr_exp.jpeg
      size = (1.778, 1)
      startVal [time (s)] = 0.0
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  Routine check_corr
    TextComponent corr_feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
Flow
  Routine instr_practice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 999
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    conditions:
      [OrderedDict([('text', '红'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '红'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '红'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '红'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '红'), ('word_color', 'blue'), ('corr_ans', 'j'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '红'), ('word_color', 'yellow'), ('corr_ans', 'h'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'blue'), ('corr_ans', 'j'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'yellow'), ('corr_ans', 'h'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '蓝'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '蓝'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'incongruent')])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
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instr_exp
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('text', '红'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '红'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '红'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '红'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '红'), ('word_color', 'blue'), ('corr_ans', 'j'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '红'), ('word_color', 'yellow'), ('corr_ans', 'h'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'congruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'blue'), ('corr_ans', 'j'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '绿'), ('word_color', 'yellow'), ('corr_ans', 'h'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '蓝'), ('word_color', 'red'), ('corr_ans', 'f'), ('trial_type', 'incongruent')]),
      OrderedDict([('text', '蓝'), ('word_color', 'green'), ('corr_ans', 'g'), ('trial_type', 'incongruent')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
